<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:p3="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p6="clr-namespace:AllenNeuralDynamics.Core.Design;assembly=AllenNeuralDynamics.Core.Design"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" DisplayName="TaskPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>C:\git\Aind.Behavior.DynamicForaging\local\DynamicForaging_AindDynamicForagingTaskLogic.json</TaskLogicPath>
        <RigPath>c:\git\Aind.Behavior.DynamicForaging\local\AindDynamicForagingRig.json</RigPath>
        <SessionPath>c:\git\Aind.Behavior.DynamicForaging\local\Session.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Session" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:CreateRuntime">
                <py:PythonHome>../.venv</py:PythonHome>
                <py:ScriptPath>./Extensions\bonsai.py</py:ScriptPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsWaveformUploadDone</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SetRewardAmount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateAutoWaterState">
                <p2:Value xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>GlobalAutoWaterState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartLogging</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:TrialOutcome">
              <rx:Name>GlobalTrialOutcome</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Trial">
              <rx:Name>GlobalTrial</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:TrialMetrics">
              <rx:Name>GlobalTrialMetrics</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RngSeed</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeedValue</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExperimentState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>-5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BiasOffsetBounds</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="31" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="31" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source3" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="33" To="35" Label="Source1" />
            <Edge From="34" To="35" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartupLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartExperimentShortcut</rx:Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>IsWaveformUploadDone</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Timeout">
                  <rx:DueTime>PT10S</rx:DueTime>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StartLogging</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartExperiment</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name />
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Hardware.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OperationControl.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TaskEngine.bonsai" />
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Name>isNull</scr:Name>
        <scr:Expression>it == null</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Visualizers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Visualizer">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>TrialPlots</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>GlobalTrialOutcome</Name>
                        </Expression>
                        <Expression xsi:type="p2:TrialOutcomeVisualizerBuilder">
                          <p2:FontSize>16</p2:FontSize>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SoftwareEvent</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>IsRightLickEvent</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:CreateSoftwareEvent">
                            <p5:EventName>LickRight</p5:EventName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>IsRightLickEvent</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:CreateSoftwareEvent">
                            <p5:EventName>LickLeft</p5:EventName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>GiveRewardRight</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:CreateSoftwareEvent">
                            <p5:EventName>WaterRight</p5:EventName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>GiveRewardRight</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:CreateSoftwareEvent">
                            <p5:EventName>WaterLeft</p5:EventName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="p2:SoftwareEventVisualizerBuilder">
                          <p2:FontSize>16</p2:FontSize>
                          <p2:TimeWindow>20</p2:TimeWindow>
                          <p2:ShadedAreaPlotters>
                            <p2:ShadedAreaPlotter>
                              <p2:EventName>QuiscentPeriod</p2:EventName>
                              <p2:Color>Gold</p2:Color>
                              <p2:Alpha>0.3</p2:Alpha>
                            </p2:ShadedAreaPlotter>
                            <p2:ShadedAreaPlotter>
                              <p2:EventName>ResponsePeriod</p2:EventName>
                              <p2:Color>SandyBrown</p2:Color>
                              <p2:Alpha>0.3</p2:Alpha>
                            </p2:ShadedAreaPlotter>
                            <p2:ShadedAreaPlotter>
                              <p2:EventName>RewardConsumptionPeriod</p2:EventName>
                              <p2:Color>RosyBrown</p2:Color>
                              <p2:Alpha>0.3</p2:Alpha>
                            </p2:ShadedAreaPlotter>
                            <p2:ShadedAreaPlotter>
                              <p2:EventName>ItiPeriod</p2:EventName>
                              <p2:Color>Green</p2:Color>
                              <p2:Alpha>0.3</p2:Alpha>
                            </p2:ShadedAreaPlotter>
                          </p2:ShadedAreaPlotters>
                          <p2:PointPlotters>
                            <p2:PointPlotter>
                              <p2:EventName>LickLeft</p2:EventName>
                              <p2:Color>Red</p2:Color>
                              <p2:YPosition>0.9</p2:YPosition>
                              <p2:MarkerSize>6</p2:MarkerSize>
                              <p2:Marker>Down</p2:Marker>
                            </p2:PointPlotter>
                            <p2:PointPlotter>
                              <p2:EventName>LickRight</p2:EventName>
                              <p2:Color>Blue</p2:Color>
                              <p2:YPosition>0.1</p2:YPosition>
                              <p2:MarkerSize>6</p2:MarkerSize>
                              <p2:Marker>Up</p2:Marker>
                            </p2:PointPlotter>
                            <p2:PointPlotter>
                              <p2:EventName>IsRightTriggerQuickRetract</p2:EventName>
                              <p2:Color>DarkCyan</p2:Color>
                              <p2:YPosition>0.5</p2:YPosition>
                              <p2:MarkerSize>6</p2:MarkerSize>
                              <p2:Marker>Plus</p2:Marker>
                            </p2:PointPlotter>
                            <p2:PointPlotter>
                              <p2:EventName>DeliverSecondaryReinforcer</p2:EventName>
                              <p2:Color>Sienna</p2:Color>
                              <p2:YPosition>0.5</p2:YPosition>
                              <p2:MarkerSize>6</p2:MarkerSize>
                              <p2:Marker>Plus</p2:Marker>
                            </p2:PointPlotter>
                            <p2:PointPlotter>
                              <p2:EventName>WaterRight</p2:EventName>
                              <p2:Color>Blue</p2:Color>
                              <p2:YPosition>0.2</p2:YPosition>
                              <p2:MarkerSize>6</p2:MarkerSize>
                              <p2:Marker>Circle</p2:Marker>
                            </p2:PointPlotter>
                            <p2:PointPlotter>
                              <p2:EventName>WaterLeft</p2:EventName>
                              <p2:Color>Red</p2:Color>
                              <p2:YPosition>0.8</p2:YPosition>
                              <p2:MarkerSize>6</p2:MarkerSize>
                              <p2:Marker>Circle</p2:Marker>
                            </p2:PointPlotter>
                          </p2:PointPlotters>
                          <p2:TrialBreakEventName />
                          <p2:MaxTrials>5</p2:MaxTrials>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="gui:TableLayoutPanelBuilder">
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:ColumnCount>1</gui:ColumnCount>
                          <gui:RowCount>2</gui:RowCount>
                          <gui:ColumnStyles />
                          <gui:RowStyles />
                          <gui:CellSpans />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="20" Label="Source1" />
                        <Edge From="3" To="17" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="17" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="17" Label="Source3" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="17" Label="Source4" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source5" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source2" />
                        <Edge From="20" To="21" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ManualOverrides</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="rx:Defer">
                          <Name>OffsetControl</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="DoubleProperty">
                                  <Value>0.05</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:BehaviorSubject">
                                <Name>BumpSize</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ManipulatorBiasTracker</Name>
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0:F2}</Format>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Text" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="gui:ButtonBuilder">
                                <gui:Enabled>true</gui:Enabled>
                                <gui:Visible>true</gui:Visible>
                                <gui:Font>Microsoft Sans Serif, 20.25pt</gui:Font>
                                <gui:Text>0.00</gui:Text>
                              </Expression>
                              <Expression xsi:type="VisualizerMapping" />
                              <Expression xsi:type="gui:ButtonBuilder">
                                <gui:Name>Left</gui:Name>
                                <gui:Enabled>true</gui:Enabled>
                                <gui:Visible>true</gui:Visible>
                                <gui:Font>Microsoft Sans Serif, 15.75pt</gui:Font>
                                <gui:Text>◀️</gui:Text>
                              </Expression>
                              <Expression xsi:type="rx:Sink">
                                <Name>BumpLeft</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>BumpSize</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="Multiply">
                                      <Operand xsi:type="DoubleProperty">
                                        <Value>-1</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>ManualSpoutDelta</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="VisualizerMapping" />
                              <Expression xsi:type="gui:ButtonBuilder">
                                <gui:Name>Right</gui:Name>
                                <gui:Enabled>true</gui:Enabled>
                                <gui:Visible>true</gui:Visible>
                                <gui:Font>Microsoft Sans Serif, 15.75pt</gui:Font>
                                <gui:Text>▶</gui:Text>
                              </Expression>
                              <Expression xsi:type="rx:Sink">
                                <Name>BumpRight</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>BumpSize</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>ManualSpoutDelta</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="VisualizerMapping" />
                              <Expression xsi:type="gui:TableLayoutPanelBuilder">
                                <gui:Enabled>true</gui:Enabled>
                                <gui:Visible>true</gui:Visible>
                                <gui:ColumnCount>2</gui:ColumnCount>
                                <gui:RowCount>1</gui:RowCount>
                                <gui:ColumnStyles />
                                <gui:RowStyles />
                                <gui:CellSpans />
                              </Expression>
                              <Expression xsi:type="VisualizerMapping" />
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ExperimentState</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Enabled" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="gui:TableLayoutPanelBuilder">
                                <gui:Enabled>false</gui:Enabled>
                                <gui:Visible>true</gui:Visible>
                                <gui:Font>Microsoft Sans Serif, 22.125pt</gui:Font>
                                <gui:ColumnCount>1</gui:ColumnCount>
                                <gui:RowCount>2</gui:RowCount>
                                <gui:ColumnStyles />
                                <gui:RowStyles />
                                <gui:CellSpans />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="18" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="14" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="18" Label="Source2" />
                              <Edge From="16" To="17" Label="Source1" />
                              <Edge From="17" To="18" Label="Source3" />
                              <Edge From="18" To="19" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="gui:GroupBoxBuilder">
                          <gui:Name>Spout offset</gui:Name>
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:Font>Microsoft Sans Serif, 15.75pt</gui:Font>
                          <gui:Text>Spout offset</gui:Text>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="rx:Defer">
                          <Name>GiveWaterUI</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="gui:ButtonBuilder">
                                <gui:Name>Left</gui:Name>
                                <gui:Enabled>true</gui:Enabled>
                                <gui:Visible>true</gui:Visible>
                                <gui:Text>💧◀</gui:Text>
                              </Expression>
                              <Expression xsi:type="rx:Sink">
                                <Name>TriggerLeft</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="BooleanProperty">
                                        <Value>false</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>GiveManualWaterRight</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="VisualizerMapping" />
                              <Expression xsi:type="gui:ButtonBuilder">
                                <gui:Name>Right</gui:Name>
                                <gui:Enabled>true</gui:Enabled>
                                <gui:Visible>true</gui:Visible>
                                <gui:Text>💧▶</gui:Text>
                              </Expression>
                              <Expression xsi:type="rx:Sink">
                                <Name>TriggerRight</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="BooleanProperty">
                                        <Value>true</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>GiveManualWaterRight</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="VisualizerMapping" />
                              <Expression xsi:type="gui:TableLayoutPanelBuilder">
                                <gui:Name>ManualWater</gui:Name>
                                <gui:Enabled>true</gui:Enabled>
                                <gui:Visible>true</gui:Visible>
                                <gui:ColumnCount>2</gui:ColumnCount>
                                <gui:RowCount>1</gui:RowCount>
                                <gui:ColumnStyles>
                                  <gui:ColumnStyle>
                                    <gui:SizeType>Percent</gui:SizeType>
                                    <gui:Width>0.5</gui:Width>
                                  </gui:ColumnStyle>
                                  <gui:ColumnStyle>
                                    <gui:SizeType>Percent</gui:SizeType>
                                    <gui:Width>0.5</gui:Width>
                                  </gui:ColumnStyle>
                                </gui:ColumnStyles>
                                <gui:RowStyles />
                                <gui:CellSpans />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                                <rx:Name>GiveManualWaterRight</rx:Name>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="Extensions\InlineSoftwareEvent.bonsai">
                                <EventName>GiveManualWaterRight</EventName>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>GiveRewardRight</Name>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="6" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="gui:GroupBoxBuilder">
                          <gui:Name>💧</gui:Name>
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
                          <gui:Text />
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="rx:Defer">
                          <Name>ForceAutoWater</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>GlobalAutoWaterState</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>!it.IsLeft</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Enabled" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="gui:ButtonBuilder">
                                <gui:Name>SetLeft</gui:Name>
                                <gui:Enabled>true</gui:Enabled>
                                <gui:Visible>true</gui:Visible>
                                <gui:Text>🎣◀</gui:Text>
                              </Expression>
                              <Expression xsi:type="rx:Sink">
                                <Name>UpdateGlobalState</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>GlobalAutoWaterState</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Expression" />
                                    </Expression>
                                    <Expression xsi:type="scr:ExpressionTransform">
                                      <scr:Expression>it.SetLeft()</scr:Expression>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>GlobalAutoWaterState</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="5" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source2" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="VisualizerMapping" />
                              <Expression xsi:type="SubscribeSubject">
                                <Name>GlobalAutoWaterState</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>!it.IsRight</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Enabled" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="gui:ButtonBuilder">
                                <gui:Name>SetRight</gui:Name>
                                <gui:Enabled>true</gui:Enabled>
                                <gui:Visible>true</gui:Visible>
                                <gui:Text>🎣▶</gui:Text>
                              </Expression>
                              <Expression xsi:type="rx:Sink">
                                <Name>UpdateGlobalState</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>GlobalAutoWaterState</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Expression" />
                                    </Expression>
                                    <Expression xsi:type="scr:ExpressionTransform">
                                      <scr:Expression>it.SetRight()</scr:Expression>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>GlobalAutoWaterState</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="5" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source2" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="VisualizerMapping" />
                              <Expression xsi:type="SubscribeSubject">
                                <Name>GlobalAutoWaterState</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>it.HasValue</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Enabled" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="gui:ButtonBuilder">
                                <gui:Name>Reset</gui:Name>
                                <gui:Enabled>false</gui:Enabled>
                                <gui:Visible>true</gui:Visible>
                                <gui:Text>❎</gui:Text>
                              </Expression>
                              <Expression xsi:type="rx:Sink">
                                <Name>UpdateGlobalState</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>GlobalAutoWaterState</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Expression" />
                                    </Expression>
                                    <Expression xsi:type="scr:ExpressionTransform">
                                      <scr:Expression>it.Reset()</scr:Expression>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>GlobalAutoWaterState</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="5" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source2" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="VisualizerMapping" />
                              <Expression xsi:type="gui:TableLayoutPanelBuilder">
                                <gui:Name>ForceAutoWater</gui:Name>
                                <gui:Enabled>true</gui:Enabled>
                                <gui:Visible>true</gui:Visible>
                                <gui:ColumnCount>3</gui:ColumnCount>
                                <gui:RowCount>1</gui:RowCount>
                                <gui:ColumnStyles />
                                <gui:RowStyles />
                                <gui:CellSpans />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="18" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="18" Label="Source2" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="17" Label="Source1" />
                              <Edge From="17" To="18" Label="Source3" />
                              <Edge From="18" To="19" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="gui:GroupBoxBuilder">
                          <gui:Name>🎣</gui:Name>
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
                          <gui:Text />
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="gui:TabControlBuilder">
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:Font>Microsoft Sans Serif, 15.75pt</gui:Font>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="gui:TableLayoutPanelBuilder">
                          <gui:Name>Manual Control</gui:Name>
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:Font>Microsoft Sans Serif, 36pt</gui:Font>
                          <gui:ColumnCount>1</gui:ColumnCount>
                          <gui:RowCount>2</gui:RowCount>
                          <gui:ColumnStyles />
                          <gui:RowStyles />
                          <gui:CellSpans />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="14" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="12" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="rx:Defer">
                    <Name>LauncherControl</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:AnnotationSource" />
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ExperimentState</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Enabled" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="gui:ButtonBuilder">
                          <gui:Name>Start</gui:Name>
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:Text>Start Experiment</gui:Text>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>StartExperimentToggleButton</Name>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="gui:ButtonBuilder">
                          <gui:Name>End</gui:Name>
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:Text>End Experiment</gui:Text>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>EndExperimentButton</Name>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="gui:TableLayoutPanelBuilder">
                          <gui:Name>LauncherControl</gui:Name>
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:Font>Microsoft Sans Serif, 26pt</gui:Font>
                          <gui:ColumnCount>2</gui:ColumnCount>
                          <gui:RowCount>4</gui:RowCount>
                          <gui:ColumnStyles />
                          <gui:RowStyles />
                          <gui:CellSpans>
                            <gui:CellSpan ColumnSpan="2" RowSpan="3" />
                            <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                            <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                          </gui:CellSpans>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StartExperimentToggleButton</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>StartExperimentShortcut</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>EndExperimentButton</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>EndExperiment</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StartExperiment</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="11" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="11" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source3" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="22" Label="Source1" />
                        <Edge From="21" To="22" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ValveUi.bonsai" />
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TabControlBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name />
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>2</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name />
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>3</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans>
                      <gui:CellSpan ColumnSpan="2" RowSpan="1" />
                    </gui:CellSpans>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCamerasStream</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\SpinnakerCameraControllerSaturationVisualizer.bonsai" />
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\AindManipulatorGui.bonsai" />
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>2</gui:RowCount>
                    <gui:ColumnStyles>
                      <gui:ColumnStyle>
                        <gui:SizeType>Percent</gui:SizeType>
                        <gui:Width>0.75</gui:Width>
                      </gui:ColumnStyle>
                      <gui:ColumnStyle>
                        <gui:SizeType>Percent</gui:SizeType>
                        <gui:Width>0.25</gui:Width>
                      </gui:ColumnStyle>
                    </gui:ColumnStyles>
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GlobalTrial</Name>
                  </Expression>
                  <Expression xsi:type="p2:TrialTableVisualizerBuilder">
                    <p2:History>2</p2:History>
                    <p2:FontSize>16</p2:FontSize>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TabControlBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="12" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="10" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="21" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="19" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="26" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="27" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ui:VisualizerWindow">
              <ui:Text>DynamicForaging</ui:Text>
              <ui:Visible>true</ui:Visible>
              <ui:Location xsi:nil="true" />
              <ui:Size xsi:nil="true" />
              <ui:WindowState>Maximized</ui:WindowState>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>