WorkflowBuilder(Version=2.9.0)
GroupWorkflow TrialData
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> Unit
    -> IncludeWorkflow TimeBase(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject LickLeft

    AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=0)
    -> BehaviorSubject ManipulatorPosition

    DoubleProperty(Value=0)
    -> BehaviorSubject OffsetGain

    Timer(DueTime=PT1S)
    -> SelectMany
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0.777S)
        -> IntProperty(Value=0)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ResponsePeriod)
        -> MulticastSubject SoftwareEvent
        -> WorkflowOutput
    -> SelectMany
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2.307S)
        -> IntProperty(Value=0)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RewardPeriod)
        -> MulticastSubject SoftwareEvent
        -> WorkflowOutput
    -> Delay(DueTime=PT2S)
    -> AindDynamicForagingDataSchema.TrialOutcome(IsRightChoice=nil, IsRewarded=false)
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TrialOutcome)
    -> MulticastSubject SoftwareEvent
    -> SelectMany
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0.164S)
        -> IntProperty(Value=0)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ITI)
        -> MulticastSubject SoftwareEvent
        -> WorkflowOutput
    -> Delay(DueTime=PT0S)
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Break)
    -> MulticastSubject SoftwareEvent
    -> Repeat

    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent => #20
    SubscribeSubject TimeBase => #21
    #20, #21 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
    -> Timestamp
    -> AllenNeuralDynamics.Core.Design.AccumulateToImmutableList
    -> BehaviorSubject SoftwareEventHistory

    Timer(DueTime=PT5S)
    -> StringProperty(Value=Expo)
    -> Take(Count=1)
    -> ToList
    -> InputMapping(Experimenter(Selector=it))
    -> AindDynamicForagingDataSchema.Session
      AindBehaviorServicesPkgVersion=0.13.5
      Version=0.13.5
      Experiment=Task6
      Date=0001-01-01T00:00:00.0000000+00:00
      SessionName=Stage1
      Subject=Plimbo
      AllowDirtyRepo=false
      SkipHardwareValidation=false
    -> Repeat => #34
    Bonsai.Windows.Input.KeyDown(Filter=M, SuppressRepetitions=false)
    -> StringProperty(Value=Expo)
    -> Take(Count=1)
    -> ToList
    -> InputMapping(Experimenter(Selector=it))
    -> AindDynamicForagingDataSchema.Session
      AindBehaviorServicesPkgVersion=0.13.5
      Version=0.13.5
      Experiment=Task7
      Date=0001-01-01T00:00:00.0000000+00:00
      SessionName=Stage2
      Subject=Plimbo
      AllowDirtyRepo=false
      SkipHardwareValidation=false
    -> Repeat => #41
    #34, #41 -> Merge
    -> BehaviorSubject SessionInfo

    StringProperty(Value=TimeElapsed) => #44
    Timer(DueTime=PT0S, Period=PT1S)
    -> FloatProperty(Value=1)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #48
      Expression: Convert.ToString(it)
    #44, #48 -> CombineLatest => #49
    StringProperty(Value=CurrentTrial) => #50
    SubscribeSubject TimedTrial
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #54
      Expression: Convert.ToString(it)
    #50, #54 -> CombineLatest => #55
    #49, #55 -> CombineLatest
    -> SelectMany
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        #1, #2 -> Merge
        -> Take(Count=2)
        -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput
    -> BehaviorSubject SessionMetadata

    SubscribeSubject TimedTrial => #59
    SubscribeSubject BiasRandom => #60
    #59, #60 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Numerics.Distributions.Sample
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it > 1 ? 1 : it
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it < -1 ? -1 : it
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #67
      Expression: new (it as Bias)
    #59 -> MemberSelector(Selector=Seconds) => #68
    #67, #68 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject TimedBias

    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> Unit
    -> IncludeWorkflow TimeBase(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject LickRight

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0.1, Upper=1)
    -> BehaviorSubject Random

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-0.1, Upper=0.1)
    -> BehaviorSubject BiasRandom

    Timer(DueTime=PT0S, Period=PT0.01S)
    -> DoubleProperty(Value=0.01)
    -> Accumulate
    -> PublishSubject TimeBase

    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.5)) => #88
    Range(Start=0, Count=500)
    -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
    -> Add(Operand=DoubleProperty(Value=3.14))
    -> Bonsai.Numerics.Sin
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #93
      Expression: (it +1) * 0.5
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.5))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it
    -> InputMapping(Value(Selector=it))
    -> CreateNullableBoolean(Value=false) => #99
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.9)) => #102
    -> CreateNullableBoolean(Value=nil) => #103
    #99, #103, #102 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #105
      Expression: Item3 ?  Item2 : Item1
    Range(Start=0, Count=500)
    -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
    -> Bonsai.Numerics.Sin
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #109
      Expression: (it +1) * 0.5
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.5)) => #112
    #88, #93, #105, #109, #112 -> Zip => #113
    -> InputMapping(IsRightChoice(Selector=Item3), IsRewarded(Selector=Item5)) => #114
    #113 -> InputMapping(PRewardLeft(Selector=Item2), PRewardRight(Selector=Item4)) => #115
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.5))
    -> InputMapping(Value(Selector=it))
    -> CreateNullableBoolean(Value=true) => #120
    -> CreateNullableBoolean(Value=nil) => #121
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.SampleMany(Count=500)
    -> GreaterThan(Operand=DoubleProperty(Value=0.05)) => #124
    #121, #120, #124 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #126
      Expression: Item3 ? Item1 : Item2
    #113, #126 -> Zip
    -> MemberSelector(Selector=Item2)
    -> PropertyMapping(IsAutoResponseRight) => #129
    #115, #129 -> AindDynamicForagingDataSchema.Trial
      PRewardLeft=0.59164587077011477
      PRewardRight=0.40913708100521279
      RewardConsumptionDuration=5
      RewardDelayDuration=0
      ResponseDeadlineDuration=5
      QuiescencePeriodDuration=0.5
      InterTrialIntervalDuration=5
      IsAutoResponseRight=nil
      LickspoutOffsetDelta=0
    -> PropertyMapping(Trial) => #131
    #114, #131 -> AindDynamicForagingDataSchema.TrialOutcome(IsRightChoice=false, IsRewarded=true)
    -> CreateObservable SampleTrial
        WorkflowInput Source1 => #0
        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #4
        #0, #4 -> Delay(DueTime=PT0.594S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Concat => #134
    SubscribeSubject TimeBase => #135
    #134, #135 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> BehaviorSubject TimedTrial

GroupWorkflow CameraData
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> PublishSubject CameraFeed
    -> WorkflowOutput

    CreateObservable Camera1
        SubscribeSubject CameraFeed => #0
        SubscribeSubject TimeBase => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> Merge => #4
    StringProperty(Value=Camera1) => #5
    #4, #5 -> WithLatestFrom => #6
    CreateObservable Camera2
        SubscribeSubject CameraFeed => #0
        SubscribeSubject TimeBase => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> Merge => #8
    StringProperty(Value=Camera2) => #9
    #8, #9 -> WithLatestFrom => #10
    #6, #10 -> Merge
    -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
    -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder
-> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
-> PublishSubject Frame

GroupWorkflow VisualizerStructure
    ExternalizedMapping(Name(DisplayName=FrameSubject))
    -> SubscribeSubject Frame => #1
    -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> TableBuilder => #3
      Visible=true
      Columns(ColumnStyling(Name=Ethograph, Flags=WidthStretch, InitValue=0), ColumnStyling(Name=Camera, Flags=WidthFixed, InitValue=320))
      Flags="BordersInnerH BordersOuterH BordersInnerV BordersOuterV BordersH BordersV BordersInner BordersOuter Borders SizingFixedFit"
      OuterSize(X=0, Y=0)
      InnerWidth=0
      ShowHeadersRow=true
    -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #5
    -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> PublishSubject Behavior => #7
    #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> PublishSubject Bias => #9
    #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> PublishSubject Ethogram => #11
    #7, #9, #11 -> CombineLatest => #12
    #3 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> PublishSubject Camera => #14
    #12, #14 -> CombineLatest
    #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=Borders, OuterSize(X=0, Y=0), InnerWidth=0)
    -> PublishSubject Metadata => #18
    #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> Bonsai.ImGui.TabBarBuilder(Visible=true, Flags=None) => #20
    -> Bonsai.ImGui.TabItemBuilder PreSession(Visible=true, Text=pre-session, Flags=None)
    -> PublishSubject PreSession => #22
    #20 -> Bonsai.ImGui.TabItemBuilder IntraSession(Visible=true, Text=intra-session, Flags=None)
    -> PublishSubject IntraSession => #24
    #18, #22, #24 -> CombineLatest

GroupWorkflow BehaviorVisualizer
    Disable ExternalizedMapping(PlotName, LickLeftSubject, LickRightSubject, TrialSubject, FrameSubject)
    -> Defer BehaviorPlot
        ExternalizedMapping(Name(DisplayName=FrameSubject))
        -> SubscribeSubject Behavior => #1
        ExternalizedMapping(Name(DisplayName=PlotName)) => #2
        #1, #2 -> Bonsai.ImGui.TableBuilder Behavior1(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #3
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImPlot.PlotBuilder EventPlot(Visible=true, Size(X=-1, Y=150), Flags=NoTitle, FlagsX=AutoFit, FlagsY=RangeFit)
        -> PublishSubject EventPlot
        #3 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImPlot.PlotBuilder ContinuousPlot(Visible=true, Size(X=-1, Y=150), Flags=NoTitle, FlagsX=AutoFit, FlagsY=None)
        -> PublishSubject ContinuousPlot

        Unit
        -> Bonsai.ImGui.Visualizers.LatestOnNewFrame EventPlot
        -> PlotStyling(TickPositions(double=0, double=1), TickLabels(string=R, string=L), ImPlotLocationFlags=West, ImPlotLegendFlags=None, YAxisMax=nil, YAxisMin=nil)

        Unit
        -> Bonsai.ImGui.Visualizers.LatestOnNewFrame ContinuousPlot
        -> PlotStyling(TickPositions(double=0, double=1), TickLabels="", ImPlotLocationFlags=West, ImPlotLegendFlags=None, YAxisMax=nil, YAxisMin=nil)

        ExternalizedMapping(Name(DisplayName=LickLeftSubject))
        -> SubscribeSubject LickLeft => #17
        -> MemberSelector(Selector=Value)
        -> DoubleProperty(Value=0.9)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #20
          Expression: new(it as LickLeft)
        #17 -> MemberSelector(Selector=Seconds) => #21
        #20, #21 -> Zip
        -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1000, IndexSelector=Item2, ValueSelector=Item1.LickLeft)
        -> Bonsai.ImGui.Visualizers.LatestOnNewFrame EventPlot
        -> ScatterStyling
          ImPlotMarker=Square
          Size=3
          FillColorR=0
          FillColorG=0
          FillColorB=0
          FillColorA=1
          OutlineColorR=0
          OutlineColorG=0
          OutlineColorB=0
          OutlineColorA=1
          OutlineWeight=1
        -> Bonsai.ImGui.Visualizers.PlotScatterSeriesBuilder(Visible=true, Flags=None)

        ExternalizedMapping(Name(DisplayName=LickRightSubject))
        -> SubscribeSubject LickRight => #28
        -> MemberSelector(Selector=Value)
        -> DoubleProperty(Value=0.1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #31
          Expression: new(it as LickRight)
        #28 -> MemberSelector(Selector=Seconds) => #32
        #31, #32 -> Zip
        -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1000, IndexSelector=Item2, ValueSelector=Item1.LickRight)
        -> Bonsai.ImGui.Visualizers.LatestOnNewFrame EventPlot
        -> ScatterStyling
          ImPlotMarker=Square
          Size=3
          FillColorR=0
          FillColorG=0
          FillColorB=0
          FillColorA=1
          OutlineColorR=0
          OutlineColorG=0
          OutlineColorB=0
          OutlineColorA=1
          OutlineWeight=1
        -> Bonsai.ImGui.Visualizers.PlotScatterSeriesBuilder(Visible=true, Flags=None)

        ExternalizedMapping(Name(DisplayName=TrialSubject)) => #38
        -> SubscribeSubject TimedTrial => #39
        -> CategorizeTrial => #40
        -> MemberSelector(Selector=Value.ChoiceCategory) => #41
        -> Condition NoChoice
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<Choice>(Value=NoChoice))
            -> WorkflowOutput
        -> DoubleProperty(Value=0.5) => #43
        #41 -> Condition LeftChoice
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<Choice>(Value=LeftChoice))
            -> WorkflowOutput
        -> DoubleProperty(Value=0.85) => #45
        #41 -> Condition RightChoice
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<Choice>(Value=RightChoice))
            -> WorkflowOutput
        -> DoubleProperty(Value=0.15) => #47
        #43, #45, #47 -> Merge
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #49
          Expression:
            new (
              it as Choice
            )
        #39 -> MemberSelector(Selector=Seconds) => #50
        #49, #50 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1000, IndexSelector=Seconds, ValueSelector=Value.Choice)
        -> Bonsai.ImGui.Visualizers.LatestOnNewFrame EventPlot
        -> ScatterStyling
          ImPlotMarker=Circle
          Size=3
          FillColorR=0
          FillColorG=0
          FillColorB=0
          FillColorA=0
          OutlineColorR=0
          OutlineColorG=1
          OutlineColorB=0
          OutlineColorA=1
          OutlineWeight=1
        -> Bonsai.ImGui.Visualizers.PlotScatterSeriesBuilder(Visible=true, Flags=None)
        #40 -> MemberSelector(Selector=Value.TrialCategory) => #57
        -> Condition LeftRewarded
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<Category>(Value=LeftRewarded))
            -> WorkflowOutput
        -> DoubleProperty(Value=0.8) => #59
        #57 -> Condition RightRewarded
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<Category>(Value=RightRewarded))
            -> WorkflowOutput
        -> DoubleProperty(Value=0.2) => #61
        #59, #61 -> Merge
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #63
          Expression:
            new (
              it as Choice
            )
        #63, #50 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1000, IndexSelector=Seconds, ValueSelector=Value.Choice)
        -> Bonsai.ImGui.Visualizers.LatestOnNewFrame EventPlot
        -> ScatterStyling
          ImPlotMarker=Circle
          Size=3
          FillColorR=0
          FillColorG=1
          FillColorB=0
          FillColorA=1
          OutlineColorR=0
          OutlineColorG=1
          OutlineColorB=0
          OutlineColorA=1
          OutlineWeight=1
        -> Bonsai.ImGui.Visualizers.PlotScatterSeriesBuilder(Visible=true, Flags=None)
        #38 -> SubscribeSubject TimedTrial => #70
        -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1000, IndexSelector=Seconds, ValueSelector=Value.Trial.Metadata.PRewardLeft)
        -> Disable Bonsai.ImGui.Visualizers.LatestOnNewFrame ContinuousPlot
        -> Disable LineStyling(ColorR=1, ColorG=0, ColorB=0, ColorA=1, LineThickness=2)
        -> Disable Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
        #70 -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1000, IndexSelector=Seconds, ValueSelector=Value.Trial.Metadata.PRewardRight)
        -> Disable Bonsai.ImGui.Visualizers.LatestOnNewFrame ContinuousPlot
        -> Disable LineStyling(ColorR=0, ColorG=0, ColorB=1, ColorA=1, LineThickness=2)
        -> Disable Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
    -> WorkflowOutput

IncludeWorkflow(Path=Extensions\BiasVisualizer.bonsai, FrameSubject=Bias, TimedBias=TimedBias)

GroupWorkflow OutputControl
    PublishSubject<System.Single> UiHabituationTimeUpdate
    PublishSubject<System.Reactive.Unit> UiMoveLeft
    PublishSubject<System.Reactive.Unit> UiGiveRight
    PublishSubject<System.Reactive.Unit> UiGiveLeft
    PublishSubject<System.Reactive.Unit> UiMoveRight
    PublishSubject<System.Reactive.Unit> UiManipulatorLeft
    PublishSubject<System.Reactive.Unit> UiManipulatorForwardLeft
    PublishSubject<System.Reactive.Unit> UiManipulatorForwardRight
    PublishSubject<System.Reactive.Unit> UiManipulatorUp
    PublishSubject<System.Boolean> UiDrainLeft
    PublishSubject<System.Boolean> UiDrainBoth
    PublishSubject<System.Boolean> UiDrainRight
    PublishSubject<System.Reactive.Unit> UiManipulatorRight
    PublishSubject<System.Reactive.Unit> UiManipulatorBackRight
    PublishSubject<System.Reactive.Unit> UiManipulatorBackLeft
    PublishSubject<System.Reactive.Unit> UiManipulatorDown
    PublishSubject<System.Reactive.Unit> UiManipulatorStop
    PublishSubject<System.Reactive.Unit> UiManipulatorHome
    PublishSubject<System.Reactive.Unit> UiManipulatorInitialize

    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut
    -> BehaviorSubject StartExperiment

    BehaviorSubject<System.Reactive.Unit> EndExperiment
    PublishSubject<System.Reactive.Unit> UiCueGiveRight
    PublishSubject<System.Reactive.Unit> UiCueGiveLeft
    PublishSubject<System.Boolean> UiKeepLeftOpen
    PublishSubject<System.Boolean> UiKeepRightOpen
    PublishSubject<System.Boolean> UiKeepBothOpen

SubscribeSubject Ethogram => #9
SubscribeSubject SoftwareEventHistory
-> PropertyMapping(SoftwareEvents) => #11
#9, #11 -> SoftwareEventVisualizer
  Visible=true
  SoftwareEvents
    TimestampedOfSoftwareEvent=""
    TimestampedOfSoftwareEvent=""
    TimestampedOfSoftwareEvent=""
    TimestampedOfSoftwareEvent=""
    TimestampedOfSoftwareEvent=""
    TimestampedOfSoftwareEvent=""
    TimestampedOfSoftwareEvent=""
    TimestampedOfSoftwareEvent=""
    TimestampedOfSoftwareEvent=""
    TimestampedOfSoftwareEvent=""
    TimestampedOfSoftwareEvent=""
    TimestampedOfSoftwareEvent=""
  TrialBreakEventName=Break
  PlotHeight=200
  ShadedAreaPlotters
    ShadedAreaPlotter(EventName=TrialOutcome, Color=CornflowerBlue, Alpha=0.3)
    ShadedAreaPlotter(EventName=RewardPeriod, Color=Crimson, Alpha=0.3)
    ShadedAreaPlotter(EventName=ITI, Color=Cyan, Alpha=0.3)
  PointPlotters
    PointPlotter(EventName=TrialOutcome, Color=SaddleBrown, YPosition=0.5, MarkerSize=2, Marker=Circle)
    PointPlotter(EventName=LickLeft, Color=Red, YPosition=0.8, MarkerSize=2, Marker=Down)
    PointPlotter(EventName=LickRight, Color=DodgerBlue, YPosition=0.2, MarkerSize=2, Marker=Up)

Unit => #13
-> GroupWorkflow CameraPreviewVisualizer
    WorkflowInput Source1 => #0
    ExternalizedMapping(FrameSubject, CameraName, MinSaturation, MaxSaturation, FlipState, Rotation, TriggeredCamerasStream) => #1
    #0, #1 -> CreateObservable CameraPreview
        ExternalizedMapping(Name(DisplayName=FrameSubject))
        -> SubscribeSubject Camera
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
        -> PublishSubject Table

        ExternalizedMapping(Name(DisplayName=TriggeredCamerasStream))
        -> SubscribeSubject TriggeredCamerasStream => #5
        ExternalizedMapping(Value(DisplayName=CameraName)) => #6
        #5, #6 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=StringProperty(Value=Camera1))
            -> WorkflowOutput
        -> Merge
        -> PublishSubject CameraStream

        SubscribeSubject Table
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #11
        SubscribeSubject CameraStream
        -> MemberSelector(Selector=Value) => #13
        SubscribeSubject OverlayAlpha
        -> PropertyMapping(Alpha) => #15
        ExternalizedMapping(MinSaturation) => #16
        ExternalizedMapping(MaxSaturation) => #17
        #13, #15, #16, #17 -> SaturationThreshold(MinSaturation=53, MaxSaturation=215, Alpha=0.5) => #18
        ExternalizedMapping(Value(DisplayName=FlipState))
        -> IntProperty(Value=2) => #20
        #18, #20 -> WithLatestFrom => #21
        -> Condition Flipped => #22
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> LessThan(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #23
        #22 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Mode) => #25
        #23, #25 -> Bonsai.Vision.Flip(Mode=Vertical) => #26
        #21 -> Condition NotFlipped
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> LessThan(Operand=IntProperty(Value=2))
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #28
        #26, #28 -> Merge => #29
        #18 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new (
             it.Size.Width / 2 as X,
             it.Size.Height / 2 as Y
            )
        -> InputMapping(X(Selector=X), Y(Selector=Y))
        -> Bonsai.Vision.CreatePoint2f(X=320, Y=240)
        -> PropertyMapping(Pivot) => #33
        ExternalizedMapping(Rotation) => #34
        #33, #34 -> Bonsai.Vision.AffineTransform(Pivot(X=320, Y=240), Translation(X=0, Y=0), Rotation=0, Scale(X=1, Y=1))
        -> PropertyMapping(Transform) => #36
        #29, #36 -> Bonsai.Vision.WarpAffine(Transform="1,0,0;0,1,0", Flags=Linear, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
        -> Bonsai.ImGui.Visualizers.SampleOnNewFrame Table
        -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        -> PropertyMapping(Image) => #40
        #11, #40 -> Bonsai.ImGui.ImageBuilder PreviewImage(Visible=true, ImageSize(X=320, Y=320), UV0(X=0, Y=0), UV1(X=1, Y=1)) => #41
        SubscribeSubject Table
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #46
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TextBuilder(Visible=true, Text=Alpha) => #48
        #46 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.SliderFloatBuilder(Visible=true, Min=0, Max=1, Flags=None, InitialValue=0.5)
        -> BehaviorSubject OverlayAlpha => #51
        #48, #51 -> CombineLatest => #52
        #41, #52 -> CombineLatest
    -> Switch
#13 -> GroupWorkflow CameraPreviewVisualizer
    WorkflowInput Source1 => #0
    ExternalizedMapping(FrameSubject, CameraName, MinSaturation, MaxSaturation, FlipState, Rotation, TriggeredCamerasStream) => #1
    #0, #1 -> CreateObservable CameraPreview
        ExternalizedMapping(Name(DisplayName=FrameSubject))
        -> SubscribeSubject Camera
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
        -> PublishSubject Table

        ExternalizedMapping(Name(DisplayName=TriggeredCamerasStream))
        -> SubscribeSubject TriggeredCamerasStream => #5
        ExternalizedMapping(Value(DisplayName=CameraName)) => #6
        #5, #6 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=StringProperty(Value=Camera2))
            -> WorkflowOutput
        -> Merge
        -> PublishSubject CameraStream

        SubscribeSubject Table
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #11
        SubscribeSubject CameraStream
        -> MemberSelector(Selector=Value) => #13
        SubscribeSubject OverlayAlpha
        -> PropertyMapping(Alpha) => #15
        ExternalizedMapping(MinSaturation) => #16
        ExternalizedMapping(MaxSaturation) => #17
        #13, #15, #16, #17 -> SaturationThreshold(MinSaturation=53, MaxSaturation=215, Alpha=0.5) => #18
        ExternalizedMapping(Value(DisplayName=FlipState))
        -> IntProperty(Value=2) => #20
        #18, #20 -> WithLatestFrom => #21
        -> Condition Flipped => #22
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> LessThan(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #23
        #22 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Mode) => #25
        #23, #25 -> Bonsai.Vision.Flip(Mode=Vertical) => #26
        #21 -> Condition NotFlipped
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> LessThan(Operand=IntProperty(Value=2))
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #28
        #26, #28 -> Merge => #29
        #18 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new (
             it.Size.Width / 2 as X,
             it.Size.Height / 2 as Y
            )
        -> InputMapping(X(Selector=X), Y(Selector=Y))
        -> Bonsai.Vision.CreatePoint2f(X=320, Y=240)
        -> PropertyMapping(Pivot) => #33
        ExternalizedMapping(Rotation) => #34
        #33, #34 -> Bonsai.Vision.AffineTransform(Pivot(X=320, Y=240), Translation(X=0, Y=0), Rotation=0, Scale(X=1, Y=1))
        -> PropertyMapping(Transform) => #36
        #29, #36 -> Bonsai.Vision.WarpAffine(Transform="1,0,0;0,1,0", Flags=Linear, FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
        -> Bonsai.ImGui.Visualizers.SampleOnNewFrame Table
        -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        -> PropertyMapping(Image) => #40
        #11, #40 -> Bonsai.ImGui.ImageBuilder PreviewImage(Visible=true, ImageSize(X=320, Y=320), UV0(X=0, Y=0), UV1(X=1, Y=1)) => #41
        SubscribeSubject Table
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #46
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TextBuilder(Visible=true, Text=Alpha) => #48
        #46 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.SliderFloatBuilder(Visible=true, Min=0, Max=1, Flags=None, InitialValue=0.5)
        -> BehaviorSubject OverlayAlpha => #51
        #48, #51 -> CombineLatest => #52
        #41, #52 -> CombineLatest
    -> Switch

SubscribeSubject SessionInfo
-> GroupWorkflow MetadataVisualizer
    WorkflowInput Source1 => #0
    ExternalizedMapping(FrameSubject, StartExperimentSubject, EndExperimentSubject, UiHabituationTimeUpdate) => #1
    #0, #1 -> CreateObservable MetadataVisualizer
        WorkflowInput Source1
        -> BehaviorSubject CurrentMetadata

        ExternalizedMapping(Name(DisplayName=FrameSubject))
        -> SubscribeSubject Metadata
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> TableBuilder => #5
          Visible=true
          Columns
            ColumnStyling(Name=Condition, Flags=None, InitValue=0)
            ColumnStyling(Name=Subject, Flags=None, InitValue=0)
            ColumnStyling(Name=Session, Flags=None, InitValue=0)
            ColumnStyling(Name=Experiment, Flags=None, InitValue=0)
            ColumnStyling(Name=Habituation, Flags=None, InitValue=0)
            ColumnStyling(Name=Control, Flags=None, InitValue=0)
          Flags="BordersInnerH BordersOuterH BordersInnerV BordersOuterV BordersH BordersV BordersInner BordersOuter Borders SizingFixedFit"
          OuterSize(X=0, Y=0)
          InnerWidth=0
          ShowHeadersRow=true
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #6
        SubscribeSubject CurrentMetadata
        -> MemberSelector(Selector=Experimenter)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Count)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Index(Operand=IntProperty(Value=0))
        -> PropertyMapping(Text) => #11
        #6, #11 -> Bonsai.ImGui.TextBuilder(Visible=true, Text=Expo)
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #13
        SubscribeSubject CurrentMetadata
        -> MemberSelector(Selector=Subject)
        -> PropertyMapping(Text) => #16
        #13, #16 -> Bonsai.ImGui.TextBuilder(Visible=true, Text=Plimbo)
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #18
        SubscribeSubject CurrentMetadata
        -> MemberSelector(Selector=SessionName)
        -> PropertyMapping(Text) => #21
        #18, #21 -> Bonsai.ImGui.TextBuilder(Visible=true, Text=Stage1)
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #23
        SubscribeSubject CurrentMetadata
        -> MemberSelector(Selector=Experiment)
        -> PropertyMapping(Text) => #26
        #23, #26 -> Bonsai.ImGui.TextBuilder(Visible=true, Text=Task6)
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #29
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TextBuilder(Visible=true, Text=Habituation) => #31
        #29 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.InputFloatBuilder Habituation(Visible=true, Flags=None, InitialValue=0, Step=0, StepFast=0) => #33
        ExternalizedMapping(Name(DisplayName=UiHabituationTimeUpdate, Category=UiControl)) => #34
        #33, #34 -> MulticastSubject UiHabituationTimeUpdate => #35
        #31, #35 -> CombineLatest
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> TableBuilder => #38
          Visible=true
          Columns(ColumnStyling(Name=Start, Flags=WidthStretch, InitValue=0), ColumnStyling(Name=Stop, Flags=WidthStretch, InitValue=0))
          Flags=None
          OuterSize(X=0, Y=0)
          InnerWidth=0
          ShowHeadersRow=false
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.ButtonBuilder(Visible=true, Text=START)
        -> Unit => #41
        ExternalizedMapping(Name(DisplayName=StartExperimentSubject, Category=UiControl)) => #42
        #41, #42 -> MulticastSubject StartExperimentShortcut
        #38 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.ButtonBuilder(Visible=true, Text=STOP)
        -> Unit => #46
        ExternalizedMapping(Name(DisplayName=EndExperimentSubject, Category=UiControl)) => #47
        #46, #47 -> MulticastSubject EndExperiment
    -> Switch
    -> WorkflowOutput

IncludeWorkflow
  Path=Extensions\PreSessionVisualizer.bonsai
  FrameSubject=PreSession
  UiKeepLeftOpne=UiKeepLeftOpen
  UiKeepRightOpen=UiKeepRightOpen
  UiKeepBothOpen=UiKeepBothOpen
  UiDrainLeft=UiDrainLeft
  UiDrainRight=UiDrainRight
  UiDrainBoth=UiDrainBoth
  UiManipulatorLeft=UiManipulatorLeft
  UiManipulatorForwardLeft=UiManipulatorForwardLeft
  UiManipulatorForwardRight=UiManipulatorForwardRight
  UiManipulatorUp=UiManipulatorUp
  UiManipulatorRight=UiManipulatorRight
  UiManipulatorBackLeft=UiManipulatorBackLeft
  UiManipulatorBackRight=UiManipulatorBackRight
  UiManipulatorDown=UiManipulatorDown
  UiManipulatorStop=UiManipulatorStop
  UiManipulatorHome=UiManipulatorHome
  UiControlManipulator=UiManipulatorInitialize

IncludeWorkflow
  Path=Extensions\IntraSessionVisualizer.bonsai
  FrameSubject=IntraSession
  UiGiveLeft=UiGiveLeft
  UiGiveRight=UiGiveRight
  UiMoveLeft=UiMoveLeft
  UiMoveRight=UiMoveRight
  SessionMetadataSubject=SessionMetadata
  StartExperimentSubject=StartExperiment
  UiCueGiveLeft=UiCueGiveLeft
  UiCueGiveRight=UiCueGiveRight
